<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="save_path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\LattePanda\TaskControl\Animals\B\2025-07-16_13-07-42_learn_ego_allo\bonsai_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>base_name</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>frame_stamps.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.LineStatusAll,ChunkData.FrameID,ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\LattePanda\TaskControl\Animals\B\2025-07-16_13-07-42_learn_ego_allo\bonsai_frame_stamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videotest</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraView</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>camera.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import os
import clr
clr.AddReference("Bonsai.System")
from Bonsai.IO import PathHelper, PathSuffix
pipename = '\\\\.\\pipe\\videotest';

def process(value):
  path = PathHelper.AppendSuffix(value, PathSuffix.Timestamp)
  os.system(r'ffmpeg -hwaccel qsv -y -f rawvideo -vcodec rawvideo -s 1280x1024 -pix_fmt gray  -r 60 -i \\.\\pipe\\videotest -c:v h264_qsv -preset medium -qp 18 {0}'.format(path))</ipy:Script>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="6" To="13" Label="Source2" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>